<?xml version="1.0"?>
<ChemistryDefinitions Version="v3_MiSeq_Amplicon_Klein">

   <ChemistryDefinition Name="CompleteCycle">
      <ChemistryStep Description="Deblock" Repeat="1">
        <Temp Duration="0" Temperature="60" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="120" />
        <PumpToFlowcell ReagentName="CMS" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="45" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="20" />
        <DispenseAndWait DispenseRate="7500" Duration="10000" />
      </ChemistryStep>
      <ChemistryStep Description="Buffer Wash" Repeat="1">
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="250" />
      </ChemistryStep>
      <ChemistryStep Description="Incorporation" Repeat="1" IsIncorporation="true">
        <PumpToFlowcell ReagentName="IMT" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="45" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="20" />
        <Temp Duration="0" Temperature="65" />
        <Wait Duration="15000" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="5" />
        <DispenseAndWait Duration="15000" />
        <Temp Duration="0" Temperature="22" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="120" />
        <PumpToFlowcell ReagentName="USM" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="45" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="20" />
        <DispenseAndWait DispenseRate="7500" Duration="10000" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="FirstBase">
      <ChemistryStep Description="Incorporation" Repeat="1" IsIncorporation="true">
        <Temp Duration="0" Temperature="60" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="120" />
        <PumpToFlowcell ReagentName="IMT" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="45" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="20" />
        <Temp Duration="0" Temperature="65" />
        <Wait Duration="30000" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="5" />
        <DispenseAndWait Duration="30000" />
        <Temp Duration="0" Temperature="22" />
        <Wait Duration="60000" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="120" />
        <PumpToFlowcell ReagentName="USM" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="45" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="20" />
        <DispenseAndWait DispenseRate="7500" Duration="10000" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="EndRead">
      <ChemistryStep Description="Safe State" Repeat="1">
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="120" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="End">
      <ChemistryStep Description="Safe State" Repeat="1">
        <PumpToFlowcell ReagentName="PW1" AspirationRate="2000" DispenseRate="7500" Volume="750" />
        <PumpToFlowcell ReagentName="PW2" AspirationRate="2000" DispenseRate="7500" Volume="750" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="EndDeblock">
      <ChemistryStep Description="Deblock" Repeat="1">
        <Temp Duration="0" Temperature="60" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="120" />
        <PumpToFlowcell ReagentName="CMS" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="45" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="20" />
        <DispenseAndWait DispenseRate="7500" Duration="10000" />
      </ChemistryStep>
      <ChemistryStep Description="Buffer Wash" Repeat="1">
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="250" />
      </ChemistryStep>
    </ChemistryDefinition>
   <ChemistryDefinition Name="TemplateRinse">
      <ChemistryStep Description="EmptyTemplate">
        <PumpToFlowcell ReagentName="TMP" AspirationRate="2000" DispenseRate="7500" Volume="500" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" DispenseRate="7500" Volume="750" />
      </ChemistryStep>
      <ChemistryStep Description="STRPR2TemplateFirst InitialPrime">
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" DispenseRate="7500" Volume="500" />
        <Dispense DispenseRate="2500" />
      </ChemistryStep>
      <ChemistryStep Description="STRPR2TemplateFirst DispenseToTemplate" Repeat="5">
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="TMP" DispenseRate="2000" Volume="250" />
      </ChemistryStep>
      <ChemistryStep Description="STRPR2TemplateFirst EmptyTube">
        <PumpToFlowcell ReagentName="TMP" AspirationRate="2000" DispenseRate="7500" Volume="2000" />
      </ChemistryStep>
      <ChemistryStep Description="STRPWTemplate InitialPrime">
        <PumpToFlowcell ReagentName="PW1" AspirationRate="2000" DispenseRate="7500" Volume="250" />
        <PumpToFlowcell ReagentName="PW2" AspirationRate="2000" DispenseRate="7500" Volume="250" />
        <Dispense DispenseRate="2500" />
      </ChemistryStep>
      <ChemistryStep Description="STRPW1Template DispenseToTemplate" Repeat="4">
	<Aspirate ReagentName="PW1" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="TMP" DispenseRate="2000" Volume="250" />
      </ChemistryStep>
      <ChemistryStep Description="STRPW2Template DispenseToTemplate" Repeat="4">
	<Aspirate ReagentName="PW2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="TMP" DispenseRate="2000" Volume="250" />
      </ChemistryStep>
      <ChemistryStep Description="STRPWTemplate EmptyTube">
        <PumpToFlowcell ReagentName="TMP" AspirationRate="2000" DispenseRate="7500" Volume="2000" />
      </ChemistryStep>
      <ChemistryStep Description="PR2 InitialPrime">
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" DispenseRate="7500" Volume="2000" />
        <Dispense DispenseRate="2500" />
       </ChemistryStep>
      <ChemistryStep Description="PR2 Reverse Flush">
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="IMT" DispenseRate="2000" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="LMX2" DispenseRate="2000" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="USM" DispenseRate="2000" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="RMF" DispenseRate="2000" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="CMS" DispenseRate="2000" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="HP10" DispenseRate="2000" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="AMS1" DispenseRate="2000" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="HP12" DispenseRate="2000" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="AMS2" DispenseRate="2000" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="HP11" DispenseRate="2000" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="LPM" DispenseRate="2000" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="TMP" DispenseRate="2000" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="LDR" DispenseRate="500" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="C1" DispenseRate="2000" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="LMX1" DispenseRate="2000" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="C2" DispenseRate="2000" Volume="250" />
	<Aspirate ReagentName="PR2" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="C3" DispenseRate="2000" Volume="250" />
      </ChemistryStep>
      <ChemistryStep Description="PW3 InitialPrime">
        <PumpToFlowcell ReagentName="PW3" AspirationRate="2000" DispenseRate="2500" Volume="500" />
        <Dispense DispenseRate="2500" />
      </ChemistryStep>
     <ChemistryStep Description="PW3 Reverse Flush">
	<Aspirate ReagentName="PW3" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="IMT" DispenseRate="2000" Volume="80" />
	<DispenseToFlowcell ReagentName="RMF" DispenseRate="2000" Volume="80" />
	<DispenseToFlowcell ReagentName="USM" DispenseRate="2000" Volume="80" />
	<Dispense DispenseRate="2000" Volume="10"/>
	<Aspirate ReagentName="PW3" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="HP10" DispenseRate="2000" Volume="80" />
	<DispenseToFlowcell ReagentName="PR2" DispenseRate="2000" Volume="80" />
	<DispenseToFlowcell ReagentName="HP12" DispenseRate="2000" Volume="80" />
	<Dispense DispenseRate="2000" Volume="10"/>
	<Aspirate ReagentName="PW3" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="CMS" DispenseRate="2000" Volume="80" />
	<DispenseToFlowcell ReagentName="HP11" DispenseRate="2000" Volume="80" />
	<DispenseToFlowcell ReagentName="AMS1" DispenseRate="2000" Volume="80" />
	<Dispense DispenseRate="2000" Volume="10"/>
	<Aspirate ReagentName="PW3" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="TMP" DispenseRate="2000" Volume="80" />
	<DispenseToFlowcell ReagentName="AMS2" DispenseRate="2000" Volume="80" />
	<DispenseToFlowcell ReagentName="C1" DispenseRate="2000" Volume="80" />
	<Dispense DispenseRate="2000" Volume="10"/>
	<Aspirate ReagentName="PW3" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="LPM" DispenseRate="2000" Volume="80" />
	<DispenseToFlowcell ReagentName="C2" DispenseRate="2000" Volume="80" />
	<DispenseToFlowcell ReagentName="LDR" DispenseRate="2000" Volume="80" />
	<Dispense DispenseRate="2000" Volume="10"/>
	<Aspirate ReagentName="PW3" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="C3" DispenseRate="2000" Volume="80" />
	<DispenseToFlowcell ReagentName="LMX1" DispenseRate="2000" Volume="80" />
	<DispenseToFlowcell ReagentName="PR2" DispenseRate="2000" Volume="80" />
	<Dispense DispenseRate="2000" Volume="10"/>
	<Aspirate ReagentName="PW3" AspirationRate="2000" Volume="250" />
	<DispenseToFlowcell ReagentName="LMX2" DispenseRate="2000" Volume="80" />
	<DispenseToFlowcell ReagentName="USM" DispenseRate="2000" Volume="80" />
	<DispenseToFlowcell ReagentName="CMS" DispenseRate="2000" Volume="80" />
	<Dispense DispenseRate="2000" Volume="10"/>
      </ChemistryStep>
      <ChemistryStep Description="ValveMotions" Repeat="8">
        <PumpToFlowcell ReagentName="HP12" AspirationRate="2000" DispenseRate="7500" Volume="0" />
        <PumpToFlowcell ReagentName="IMT" AspirationRate="2000" DispenseRate="7500" Volume="0" />
        <PumpToFlowcell ReagentName="HP12" AspirationRate="2000" DispenseRate="7500" Volume="0" />
        <PumpToFlowcell ReagentName="AMS2" AspirationRate="2000" DispenseRate="7500" Volume="0" />
        <PumpToFlowcell ReagentName="C1" AspirationRate="2000" DispenseRate="7500" Volume="0" />
        <PumpToFlowcell ReagentName="AMS2" AspirationRate="2000" DispenseRate="7500" Volume="0" />
      </ChemistryStep>
    </ChemistryDefinition>
   <ChemistryDefinition Name="ResumeChemistry">
      <ChemistryStep Description="Prepare for scanning" Repeat="1">
        <Temp Duration="0" Temperature="22" />
        <PumpToFlowcell ReagentName="USM" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="45" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="20" />
        <Wait Duration="10000" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="PauseChemistry">
      <ChemistryStep Description="Pause flowcell" Repeat="1">
        <Temp Duration="0" Temperature="22" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="120" />
      </ChemistryStep>
    </ChemistryDefinition>
       <ChemistryDefinition Name="OnBoardClusterGeneration">
      <ChemistryStep Description="Flow Check" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="PW1" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="300" />
        <PumpToFlowcell ReagentName="PW2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="300" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="750" />
      </ChemistryStep>
      <ChemistryStep Description="Prime PR2 Bypass" Repeat="3" IsDeblock="false" IsIncorporation="false">
        <Dispense DispenseRate="2500" />
        <AspirateFromBypass AspirationRate="2000" Volume="250" />
        <Dispense DispenseRate="2500" />
      </ChemistryStep>
      <ChemistryStep Description="Initial Prime" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="LDR" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="300" />
        <Temp Duration="30000" Temperature="40" />
        <PumpToFlowcell ReagentName="AMS1" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="300" />
        <PumpToFlowcell ReagentName="LPM" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="300" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="300" />
        <Temp Duration="30000" Temperature="75" />
        <PumpToFlowcell ReagentName="TMP" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="300" />		
      </ChemistryStep>
      <ChemistryStep Description="TMP RampDown" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <Wait Duration="300000" />
        <Temp Duration="300000" Temperature="40" />
      </ChemistryStep>
      <ChemistryStep Description="TMP Buffer Wash" Repeat="15" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="PR2" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="5" />
        <Wait Duration="18000" />
      </ChemistryStep>
      <ChemistryStep Description="First Extension" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <Temp Duration="30000" Temperature="50" />
        <PumpToFlowcell ReagentName="AMS1" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="200" />
        <Wait Duration="3000" />
        <PumpToFlowcell ReagentName="AMS1" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="10" />
        <Wait Duration="3000" />
        <PumpToFlowcell ReagentName="AMS1" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="10" />
        <Wait Duration="3000" />
        <PumpToFlowcell ReagentName="AMS1" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="10" />
        <Wait Duration="3000" />
        <PumpToFlowcell ReagentName="AMS1" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="10" />
        <Wait Duration="3000" />
        <PumpToFlowcell ReagentName="AMS1" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="10" />
        <Wait Duration="3000" />
      </ChemistryStep>
      <ChemistryStep Description="FE Wait Amp-TempRamp" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <Wait Duration="90000" />
        <Temp Duration="0" Temperature="50" />
      </ChemistryStep>
      <ChemistryStep Description="Amplification 1" Repeat="24" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="LDR" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="28" />
        <Wait Duration="7200" />
        <PumpToFlowcell ReagentName="LPM" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="28" />
        <Wait Duration="7200" />
        <PumpToFlowcell ReagentName="AMS1" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="72" />
        <Wait Duration="18700" />
      </ChemistryStep>
      <ChemistryStep Description="Amplification-Wash" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="120" />
        <Temp Duration="0" Temperature="20" />
      </ChemistryStep>
      <ChemistryStep Description="Linearisation" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="LMX1" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="300" />
        <PumpToFlowcell ReagentName="LMX1" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="75" />
        <Temp Duration="0" Temperature="46" />
        <Wait Duration="300000" />
        <PumpToFlowcell ReagentName="LMX1" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="25" />
        <Wait Duration="300000" />
        <PumpToFlowcell ReagentName="LMX1" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="25" />
        <Wait Duration="300000" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="120" />
      </ChemistryStep>
      <ChemistryStep Description="SBS Prime" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <Temp Duration="0" Temperature="20" />
        <PumpToFlowcell ReagentName="IMT" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="300" />
        <PumpToFlowcell ReagentName="USM" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="300" />
        <PumpToFlowcell ReagentName="CMS" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="300" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="250" />
      </ChemistryStep>
    </ChemistryDefinition>
 <ChemistryDefinition Name="PairedEndTurnaround">
    
    <ChemistryStep Description="Pre-resynthesis_tempramp">
      <PumpToFlowcell ReagentName="AMS2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="300" />
      <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" DispenseRate="7500" Volume="120" />
      <Temp Temperature="50" />
    </ChemistryStep>
    <ChemistryStep Description="Resynthesis" Repeat="12" > 
       <PumpToFlowcell ReagentName="LDR" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="28" />
        <Wait Duration="7200" />
        <PumpToFlowcell ReagentName="LPM" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="28" />
        <Wait Duration="7200" />
        <PumpToFlowcell ReagentName="AMS2" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="72" />
        <Wait Duration="18700" />
    </ChemistryStep>
    <ChemistryStep Description="Post-resynthesis_wash">
      <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" DispenseRate="7500" Volume="120" />
      <Temp Temperature="20" Duration="45000" />
    </ChemistryStep>
    <ChemistryStep Description="Linearisation 2">
       <PumpToFlowcell ReagentName="LMX2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="300" />
        <PumpToFlowcell ReagentName="LMX2" AspirationRate="250" Solution="0" DispenseRate="7500" Volume="75" />
      <Temp Temperature="38" />
        <Wait Duration="300000"/>
        <PumpToFlowcell ReagentName="LMX2" AspirationRate="250" DispenseRate="7500" Volume="25" />
	<Wait Duration="300000" />
        <PumpToFlowcell ReagentName="LMX2" AspirationRate="250" DispenseRate="7500" Volume="25" />
        <Wait Duration="300000" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="120" />
    </ChemistryStep>
  </ChemistryDefinition>
 <ChemistryDefinition Name="FirstReadPreparation">
    <ChemistryStep Description="FirstReadPreparation">
	<PumpToFlowcell ReagentName="LDR" AspirationRate="250" DispenseRate="7500" Volume="75" />
        <Temp Temperature="65" Duration="60000" />
        <PumpToFlowcell ReagentName="ReadOnePrimer" AspirationRate="2000" DispenseRate="7500" Volume="300" />
        <PumpToFlowcell ReagentName="ReadOnePrimer" AspirationRate="250" DispenseRate="7500" Volume="75" />
        <Temp Temperature="40" Duration="60000" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" DispenseRate="7500" Volume="120" />
        <TempOff />
    </ChemistryStep>
  </ChemistryDefinition>
 <ChemistryDefinition Name="SecondReadPreparation">
    <ChemistryStep Description="SecondReadPreparation">
	<PumpToFlowcell ReagentName="LDR" AspirationRate="250" DispenseRate="7500" Volume="75" />
        <Temp Temperature="65" Duration="60000" />
        <PumpToFlowcell ReagentName="ReadTwoPrimer" AspirationRate="2000" DispenseRate="7500" Volume="300" />
        <PumpToFlowcell ReagentName="ReadTwoPrimer" AspirationRate="250" DispenseRate="7500" Volume="75" />
        <Temp Temperature="40" Duration="60000" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" DispenseRate="7500" Volume="120" />
        <TempOff />
    </ChemistryStep>
  </ChemistryDefinition>
 <ChemistryDefinition Name="Index1Preparation">
 <ChemistryStep Description="Index1Preparation">
 	<Temp Temperature="20" Duration="25000" /> 
	<PumpToFlowcell ReagentName="LDR" AspirationRate="250" DispenseRate="7500" Volume="75" />
        <Temp Temperature="65" Duration="60000" />
        <PumpToFlowcell ReagentName="IndexPrimer" AspirationRate="2000" DispenseRate="7500" Volume="300" />
        <PumpToFlowcell ReagentName="IndexPrimer" AspirationRate="250" DispenseRate="7500" Volume="75" />
        <Temp Temperature="40" Duration="60000" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" DispenseRate="7500" Volume="120" />
        <TempOff />
 </ChemistryStep>
 </ChemistryDefinition>
  <ChemistryDefinition Name="Deprotection">
   <ChemistryStep Description="Deprotection">
      <Temp Temperature="20" /> 
      <Wait Duration="120000" /> 
      <PumpToFlowcell ReagentName="RMF" AspirationRate="2000" DispenseRate="7500" Volume="300" />
      <PumpToFlowcell ReagentName="RMF" AspirationRate="250" DispenseRate="7500" Volume="75" />
      <Temp Temperature="38" />
      <Wait Duration="300000"/>
      <PumpToFlowcell ReagentName="RMF" AspirationRate="250" DispenseRate="7500" Volume="25" />
      <Wait Duration="300000"/>
      <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" DispenseRate="7500" Volume="120" />
    </ChemistryStep>
   <ChemistryStep Description="Denaturation">
 	<Temp Temperature="20" Duration="25000" /> 
	<PumpToFlowcell ReagentName="LDR" AspirationRate="250" DispenseRate="7500" Volume="75" />
        <Temp Temperature="65" Duration="60000" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" DispenseRate="7500" Volume="300" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="250" DispenseRate="7500" Volume="75" />
        <Temp Temperature="40" Duration="60000" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" DispenseRate="7500" Volume="120" />
        <TempOff />
    </ChemistryStep>
 </ChemistryDefinition>
    <ChemistryDefinition Name="Index2FirstBaseDark">
      <ChemistryStep Description="Incorporation" Repeat="1">
        <Temp Temperature="60" Duration="0" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="120" />
        <PumpToFlowcell ReagentName="IMT" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="45" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="20" />
        <Temp Temperature="65" Duration="0" />
        <Wait Duration="30000" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="5" />
        <DispenseAndWait Duration="30000" />
        <Temp Temperature="22" Duration="0" />
        <Wait Duration="60000" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="120" />
        <PumpToFlowcell ReagentName="USM" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="45" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="20" />
        <DispenseAndWait Duration="10000" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="Index2CompleteCycleDark2">
      <ChemistryStep Description="Deblock" Repeat="1">
        <Temp Temperature="60" Duration="0" />
         <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="120" />
        <PumpToFlowcell ReagentName="CMS" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="45" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="20" />
        <DispenseAndWait DispenseRate="7500" Duration="10000" />
      </ChemistryStep>
      <ChemistryStep Description="Buffer Wash" Repeat="1">
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="250" />
      </ChemistryStep>
      <ChemistryStep Description="Incorporation" Repeat="1">
        <PumpToFlowcell ReagentName="IMT" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="45" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="20" />
        <Temp Temperature="65" Duration="0" />
        <Wait Duration="30000" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="5" />
        <DispenseAndWait Duration="30000" />
        <Temp Temperature="22" Duration="0" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="120" />
        <PumpToFlowcell ReagentName="USM" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="45" />
        <PumpToFlowcell ReagentName="PR2" AspirationRate="2000" Solution="0" DispenseRate="7500" Volume="20" />
        <DispenseAndWait DispenseRate="7500" Duration="10000" />
      </ChemistryStep>
    </ChemistryDefinition>
  </ChemistryDefinitions>